---
API: 2.1
OpenSesame: 3.3.10
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "SlimStampen example"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\Gebruiker\\Documents\\University\\User_Models\\AbsolutePitch-Slimstampen"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background black

define inline_script Base_
	set description "Executes Python code"
	set _run ""
	set _prepare ""

define inline_script Control_Variables
	set description "Executes Python code"
	set _run "duration_in_min = 15"
	set _prepare ""

define inline_script Experiment_Class
	set description "Executes Python code"
	___run__
	class Experiment:
	    def __init__(self, interface):
	        self.interface = interface
	        self.spacing_model = SpacingModel()
	        
	    def load_csv(self, file_name):
	        with open(pool[file_name]) as f:
	            lines = f.readlines()
	        column_names = lines[0].split(',')[1:]
	        items_ = [{column_names[i]: cell \
	                   for i, cell in enumerate(line.split(','))} \
	                   for line in lines[1:]]
	        random.shuffle(items_)
	        for i, item in enumerate(items_):
	            fact = Fact(i, item['cue'], item['answer'])
	            m.add_fact(fact)
	    
	    def get_next_item(self):
	        self.item = self.spacing_model.get_next_fact( \
	                        current_time = self.current_trial_start_time)
	        return self.item
	    
	    def present_cue(self):
	        self.interface.play_audio(self.item.question)
	        # if self.item.cue.cue_type == 'audio':
	        #     self.output.play_audio(self.cue.text)
	        # elif self.item.cue.cue_type == 'text':
	        #     text = Text(self.item.cue.text, 50)
	        #     self.output.show_texts_on_screen([text])
	    
	    def show_correct_answer(self):
	        text = Text(item.correct_answer, y= 50)
	        self.output.show_texts_on_canvas([text])
	        
	    def get_iteration_statistics(self):
	        iteration_statistics = {
	            'cue': self.item.cue, \
	            'answer': self.item.answer, \
	            'response': self.response, \
	            'correct': self.correct, \
	            'response_time': self.rt
	            }
	        return iteration_statistics
	    
	    def run_one_item(self):
	        self.current_trial_start_time = clock.time()
	        self.get_next_item()
	        self.present_cue()
	        if item.first_presentation: self.show_correct_answer()
	        self.response, self.rt = self.interface.get_text_input()
	        self.correct = self.response == self.cue.answer
	        return self.get_iteration_statistics()
	__end__
	set _prepare ""

define inline_script Get_Item
	set description "Executes Python code"
	___run__
	next_fact_inst, new_inst = m_instruments.get_next_fact(current_time = trial_start_time)
	prompt_inst = next_fact_inst.question
	answer_inst = next_fact_inst.answer
	__end__
	set _prepare ""

define inline_script Keyboard_Input_Class
	set description "Executes Python code"
	___run__
	class Keyboard_Input:
	    def __init__(self, interface):
	        self.keyboard = Keyboard()
	        self.text = ""
	        self.interface = interface
	        
	    def set_to_init_values(self):
	        self.n_presses = 0
	        self.text = ""
	        self.t_first_input = 0
	        self.t_last_empty = 0
	        self.t_return = 0
	        
	    def register_times(self, key):
	        t = clock.time()
	        if not self.n_presses and not self.is_ctrl_chr(key):
	            self.t_first_input = t
	        if not self.text and not self.is_ctrl_chr(key):
	            self.t_last_empty = t
	        if key == 'return':
	            self.t_return = t
	        
	    def add_char_to_end(self, char):
	        self.text += char
	        
	    def remove_char_from_end(self):
	        if self.text == '': return
	        self.text = self.text[:-1]
	    
	    def parse_key_press(self, key):
	        if key == 'return': True
	        elif key == 'backspace': self.remove_char_from_end()
	        elif key == '1': self.interface.repeat_cue()
	        elif key == 'space': self.add_char_to_text(' ')
	        else: self.add_char_to_text(self.keyboard.to_chr(key))
	        return False
	        
	    def take_input(self):
	        is_done = False
	        self.interface.lock_text()
	        while is_done:
	            key, _ = keyboard.get_key()
	            self.register_times(key)
	            is_done = self.parse_key_press(key)
	            self.interface.show_text_on_canvas(self.text, y= 100)
	        self.interface.unlock_text()
	        return self.text, self.t_first_input
	__end__
	set _prepare ""

define inline_script Loop
	set description "Executes Python code"
	___run__
	while clock.time() < end_time:
	    mask_experiment.run_one_item()
	    main_experiment.run_one_item()
	__end__
	set _prepare ""

define sequence Mask_Item
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Start_Trial_Timer always
	run Get_Item always
	run Query_Participant always

define loop Perfect_pitch_loop
	set source table
	set repeat 2
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run new_sequence_1

define inline_script Query_Participant
	set description "Executes Python code"
	___run__
	my_canvas = Canvas()
	
	src = pool[promptinst+".wav"]
	
	mysampler = Sampler(src,volume = 0.2)
	
	mysampler.play()
	mysampler.wait()
	
	if newinst:
		my_canvas.text(answerinst, y = 50, font_size = 20)
	my_canvas.prepare()
	my_canvas.show()
	
	my_keyboard = Keyboard()
	keyboard_response = ""
	erased_answer = False
	rt = float("inf")
	
	# Keep listening for key presses until the user presses Enter
	while True:
		key, time = my_keyboard.get_key()
		
		# The first keypress determines the response time
		if keyboard_response == "" and not erased_answer:
			rt = clock.time() - trial_start_time
		
		if key == "return":
			break
			
		# press 1 for repeating the note
		if key == "1" or key =="backspace":
			if key == "1":
				Sampler(src).play()
			keyboard_response = keyboard_response[:-1]
			# If the answer is completely erased, the RT is no longer informative
			if keyboard_response == "":
				erased_answer = True
				rt = float("inf")
		
		elif key == "space":
			keyboard_response += " "
		
		else:
			keyboard_response += my_keyboard.to_chr(key)
	
		# Update what's on screen'
		my_canvas.clear()
		#my_canvas.text(prompt, font_size = 30)
		if newinst:
			my_canvas.text(answerinst, y = 50, font_size = 20)
		my_canvas.text(keyboard_response, y = 100)
		my_canvas.prepare()
		my_canvas.show()
	__end__
	set _prepare ""

define inline_script Setup
	set description "Executes Python code"
	___run__
	interface = UI()
	main_experiment = Experiment(interface, 'main_experiment_items.csv')
	mask_experiment = Experiment(interface, 'mask_experiment_items.csv')
	repi_experiment = Experiment(interface, 'repi_experiment_items.csv')
	__end__
	set _prepare ""

define inline_script SlimStampen
	set description "Executes Python code"
	___run__
	from __future__ import division
	import math
	import pandas as pd
	from collections import namedtuple
	
	Fact = namedtuple("Fact", "fact_id, question, answer")
	Response = namedtuple("Response", "fact, start_time, rt, correct, condition, test")
	Encounter = namedtuple("Encounter", "activation, time, reaction_time, decay")
	
	
	class SpacingModel(object):
	
	    # Model constants
	    LOOKAHEAD_TIME = 15000
	    FORGET_THRESHOLD = -0.8
	    DEFAULT_ALPHA = 0.3
	    C = 0.25
	    F = 1.0
	
	    def __init__(self):
	        self.facts = []
	        self.responses = []
	
	    def add_fact(self, fact):
	        # type: (Fact) -> None
	        """
	        Add a fact to the list of study items.
	        """
	        # Ensure that a fact with this ID does not exist already
	        if next((f for f in self.facts if f.fact_id == fact.fact_id), None):
	            raise RuntimeError(
	                "Error while adding fact: There is already a fact with the same ID: {}. Each fact must have a unique ID".format(fact.fact_id))
	
	        self.facts.append(fact)
	
	
	    def register_response(self, response):
	        # type: (Response) -> None
	        """
	        Register a response.
	        """
	        # Prevent duplicate responses
	        if next((r for r in self.responses if r.start_time == response.start_time), None):
	            raise RuntimeError(
	                "Error while registering response: A response has already been logged at this start_time: {}. Each response must occur at a unique start_time.".format(response.start_time))
	
	        self.responses.append(response)
	
	
	    def get_next_fact(self, current_time):
	        # type: (int) -> (Fact, bool)
	        """
	        Returns a tuple containing the fact that needs to be repeated most urgently and a boolean indicating whether this fact is new (True) or has been presented before (False).
	        If none of the previously studied facts needs to be repeated right now, return a new fact instead.
	        """
	        # Calculate all fact activations in the near future
	        fact_activations = [(f, self.calculate_activation(current_time + self.LOOKAHEAD_TIME, f)) for f in self.facts]
	
	        seen_facts = [(f, a) for (f, a) in fact_activations if a > -float("inf")]
	        not_seen_facts = [(f, a) for (f, a) in fact_activations if a == -float("inf")]
	
	        # Prevent an immediate repetition of the same fact
	        if len(seen_facts) > 2:
	            last_response = self.responses[-1]
	            seen_facts = [(f, a) for (f, a) in seen_facts if f.fact_id != last_response.fact.fact_id]
	
	        # Reinforce the weakest fact with an activation below the threshold
	        seen_facts_below_threshold = [(f, a) for (f, a) in seen_facts if a < self.FORGET_THRESHOLD]
	        if len(not_seen_facts) == 0 or len(seen_facts_below_threshold) > 0:
	            weakest_fact = min(seen_facts, key = lambda t: t[1])
	            return((weakest_fact[0], False))
	
	        # If none of the previously seen facts has an activation below the threshold, return a new fact
	        return((not_seen_facts[0][0], True))
	
	
	    def get_rate_of_forgetting(self, time, fact):
	        # type: (int, Fact) -> float
	        """
	        Return the estimated rate of forgetting of the fact at the specified time
	        """
	        encounters = []
	
	        responses_for_fact = [r for r in self.responses if r.fact.fact_id == fact.fact_id and r.start_time < time]
	        alpha = self.DEFAULT_ALPHA
	
	        # Calculate the activation by running through the sequence of previous responses
	        for response in responses_for_fact:
	            activation = self.calculate_activation_from_encounters(encounters, response.start_time)
	            encounters.append(Encounter(activation, response.start_time, self.normalise_reaction_time(response), self.DEFAULT_ALPHA))
	            alpha = self.estimate_alpha(encounters, activation, response, alpha)
	
	            # Update decay estimates of previous encounters
	            encounters = [encounter._replace(decay = self.calculate_decay(encounter.activation, alpha)) for encounter in encounters]
	
	        return(alpha)
	
	
	    def calculate_activation(self, time, fact):
	        # type: (int, Fact) -> float
	        """
	        Calculate the activation of a fact at the given time.
	        """
	
	        encounters = []
	
	        responses_for_fact = [r for r in self.responses if r.fact.fact_id == fact.fact_id and r.start_time < time]
	        alpha = self.DEFAULT_ALPHA
	
	        # Calculate the activation by running through the sequence of previous responses
	        for response in responses_for_fact:
	            activation = self.calculate_activation_from_encounters(encounters, response.start_time)
	            encounters.append(Encounter(activation, response.start_time, self.normalise_reaction_time(response), self.DEFAULT_ALPHA))
	            alpha = self.estimate_alpha(encounters, activation, response, alpha)
	
	            # Update decay estimates of previous encounters
	            encounters = [encounter._replace(decay = self.calculate_decay(encounter.activation, alpha)) for encounter in encounters]
	
	        return(self.calculate_activation_from_encounters(encounters, time))
	
	
	    def calculate_decay(self, activation, alpha):
	        # type: (float, float) -> float
	        """
	        Calculate activation-dependent decay
	        """
	        return self.C * math.exp(activation) + alpha
	
	
	    def estimate_alpha(self, encounters, activation, response, previous_alpha):
	        # type: ([Encounter], float, Response, float) -> float
	        """
	        Estimate the rate of forgetting parameter (alpha) for an item.
	        """
	        if len(encounters) < 3:
	            return(self.DEFAULT_ALPHA)
	
	        a_fit = previous_alpha
	        reading_time = self.get_reading_time(response.fact.question)
	        estimated_rt = self.estimate_reaction_time_from_activation(activation, reading_time)
	        est_diff = estimated_rt - self.normalise_reaction_time(response)
	
	        if est_diff < 0:
	            # Estimated RT was too short (estimated activation too high), so actual decay was larger
	            a0 = a_fit
	            a1 = a_fit + 0.05
	        
	        else:
	            # Estimated RT was too long (estimated activation too low), so actual decay was smaller
	            a0 = a_fit - 0.05
	            a1 = a_fit
	
	        # Binary search between previous fit and proposed alpha
	        for _ in range(6):
	            # Adjust all decays to use the new alpha
	            a0_diff = a0 - a_fit
	            a1_diff = a1 - a_fit
	            d_a0 = [e._replace(decay = e.decay + a0_diff) for e in encounters]
	            d_a1 = [e._replace(decay = e.decay + a1_diff) for e in encounters]
	
	            # Calculate the reaction times from activation and compare against observed RTs
	            encounter_window = encounters[max(1, len(encounters) - 5):]
	            total_a0_error = self.calculate_predicted_reaction_time_error(encounter_window, d_a0, reading_time)
	            total_a1_error = self.calculate_predicted_reaction_time_error(encounter_window, d_a1, reading_time)
	
	            # Adjust the search area based on the lowest total error
	            ac = (a0 + a1) / 2
	            if total_a0_error < total_a1_error:
	                a1 = ac
	            else:
	                a0 = ac
	        
	        # The new alpha estimate is the average value in the remaining bracket
	        return((a0 + a1) / 2)
	
	
	    def calculate_activation_from_encounters(self, encounters, current_time):
	        # type: ([Encounter], int) -> float
	        included_encounters = [e for e in encounters if e.time < current_time]
	
	        if len(included_encounters) == 0:
	            return(-float("inf"))
	
	        return(math.log(sum([math.pow((current_time - e.time) / 1000, -e.decay) for e in included_encounters])))
	
	
	    def calculate_predicted_reaction_time_error(self, test_set, decay_adjusted_encounters, reading_time):
	        # type: ([Encounter], [Encounter], Fact) -> float
	        """
	        Calculate the summed absolute difference between observed response times and those predicted based on a decay adjustment.
	        """
	        activations = [self.calculate_activation_from_encounters(decay_adjusted_encounters, e.time - 100) for e in test_set]
	        rt = [self.estimate_reaction_time_from_activation(a, reading_time) for a in activations]
	        rt_errors = [abs(e.reaction_time - rt) for (e, rt) in zip(test_set, rt)]
	        return(sum(rt_errors))
	
	
	    def estimate_reaction_time_from_activation(self, activation, reading_time):
	        # type: (float, int) -> float
	        """
	        Calculate an estimated reaction time given a fact's activation and the expected reading time 
	        """
	        return((self.F * math.exp(-activation) + (reading_time / 1000)) * 1000)
	
	
	    def get_max_reaction_time_for_fact(self, fact):
	        # type: (Fact) -> float
	        """
	        Return the highest response time we can reasonably expect for a given fact
	        """
	        reading_time = self.get_reading_time(fact.question)
	        max_rt = 1.5 * self.estimate_reaction_time_from_activation(self.FORGET_THRESHOLD, reading_time)
	        return(max_rt)
	
	
	    def get_reading_time(self, text):
	        # type: (str) -> float
	        """
	        Return expected reading time in milliseconds for a given string
	        """
	        word_count = len(text.split())
	
	        if word_count > 1:
	            character_count = len(text)
	            return(max((-157.9 + character_count * 19.5), 300))
	        
	        return(300)
	
	    
	    def normalise_reaction_time(self, response):
	        # type: (Response) -> float
	        """
	        Cut off extremely long responses to keep the reaction time within reasonable bounds
	        """
	        rt = response.rt if response.correct else 60000
	        max_rt = self.get_max_reaction_time_for_fact(response.fact)
	        return(min(rt, max_rt))
	
	
	    def export_data(self, path = None, header_true = True):
	        # type: (str) -> DataFrame
	        """
	        Save the response data to the specified csv file, and return a copy of the pandas DataFrame.
	        If no path is specified, return a CSV-formatted copy of the data instead.
	        """
	
	        def calc_rof(row):
	            return(self.get_rate_of_forgetting(row["start_time"] + 1, row["fact"]))
	
	        dat_resp = pd.DataFrame(self.responses)
	        dat_facts = pd.DataFrame([r.fact for r in self.responses])
	        dat = pd.concat([dat_resp, dat_facts], axis = 1)
	
	        # Add column for rate of forgetting estimate after each observation
	        dat["alpha"] = dat.apply(calc_rof, axis = 1)
	        dat.drop(columns = "fact", inplace = True)
	
	        # Add trial number column
	        dat.index.name = "trial"
	        dat.index = dat.index + 1
	            
	
	        # Save to CSV file if a path was specified, otherwise return the CSV-formatted output
	        if path is not None:
	            dat.to_csv(path, header=header_true, encoding="UTF-8")
	            return(dat)
	        
	        return(dat.to_csv(header=header_true))
	__end__
	set _prepare ""

define inline_script Start_Trial_Timer
	set description "Executes Python code"
	___run__
	trial_start_time = clock.time()
	__end__
	set _prepare ""

define loop TestingTrial
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run Testingblock

define sketchpad Testing_instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Testing phase begins now<br />Press any key to continue<br /><br />" x=0 y=0 z_index=0

define inline_script Testingblock
	set description "Executes Python code"
	___run__
	#####
	
	### combine the two lists of facts
	
	fact_list_to_test = []
	
	# extra randomizer
	random.shuffle(facts)
	random.shuffle(factsinstrument)
	i = 0
	while i < len(facts) and i < len(factsinstrument): #merging the two lists counterwise
	    fact_list_to_test.append((factsinstrument[i], "instrument"))
	    fact_list_to_test.append((facts[i], "pitch"))
	    i += 1
	
	if i >= len(facts):    # bad, probably
	    fact_list_to_test = fact_list_to_test + factsinstrument[i:-1]
	else:
	    fact_list_to_test = fact_list_to_test + facts[i:-1]
	
	
	for fact in fact_list_to_test[0:2]:    # should test all
	    test_fact, condition = fact
	    trial_start_time = clock.time()
	    src = pool[test_fact.question+".wav"]
	    volume_set = 0.2
	    if condition == "pitch":
	        volume_set = 1
	    mysampler = Sampler(src,volume = volume_set)
	    mysampler.play()
	    mysampler.wait()
	    
	    #if newinst:
	    #	my_canvas.text(answerinst, y = 50, font_size = 20)
	    my_canvas.prepare()
	    my_canvas.show()
	    
	    
	    #here we need to add code to give possitive /or negative feedback for the instrument slimpstampen model
	    
	    
	    # Listen for keyboard input and show keypresses on screen as they occur
	    my_keyboard = Keyboard()
	    keyboard_response = ""
	    erased_answer = False
	    rt = float("inf")
	    
	    # Keep listening for key presses until the user presses Enter
	    while True:
	    	key, time = my_keyboard.get_key()
	    	
	    	# The first keypress determines the response time
	    	if keyboard_response == "" and not erased_answer:
	    		rt = clock.time() - trial_start_time
	    	
	    	if key == "return":
	    		break
	    		
	    	# press 1 for repeating the note
	    	if key == "1" or key =="backspace":
	    		if key == "1":
	    			Sampler(src).play()
	    		keyboard_response = keyboard_response[:-1]
	    		# If the answer is completely erased, the RT is no longer informative
	    		if keyboard_response == "":
	    			erased_answer = True
	    			rt = float("inf")
	    	
	    	elif key == "space":
	    		keyboard_response += " "
	    	
	    	else:
	    		keyboard_response += my_keyboard.to_chr(key)
	    
	    	# Update what's on screen'
	    	my_canvas.clear()
	    	#my_canvas.text(prompt, font_size = 30)
	    	#if newinst:
	    	#	my_canvas.text(pitch.answer, y = 50, font_size = 20)
	    	my_canvas.text(keyboard_response, y = 100)
	    	my_canvas.prepare()
	    	my_canvas.show()
	    
	    
	    # Check if the response is correct
	    correct = keyboard_response == test_fact.answer
	    
	    # Log response
	    response = Response(test_fact, trial_start_time, rt, correct, condition, "test")
	    if condition == "pitch":
	        m.register_response(response) 
	    elif condition == "instrument":
	        minstruments.register_response(response) 
	    
	    # Show feedback
	    feedback_color = "green" if correct else "red"
	    my_canvas.text(keyboard_response, y = 100, color = feedback_color)
	    if not correct:
	    	my_canvas.text(test_fact.answer, y = 150)
	    my_canvas.prepare()
	    my_canvas.show()
	    clock.sleep(var.feedback_duration)
	    
	    # Clear the screen between trials
	    my_canvas.clear()
	    my_canvas.prepare()
	    my_canvas.show()
	    clock.sleep(var.inter_trial_interval)
	    var.trial_num += 1
	    
	    
	    
	    var.time_up = False
	    
	    
	    
	__end__
	set _prepare ""

define inline_script TestingblockInstrument
	set description "Executes Python code"
	___run__
	#####
	
	
	for instrument in factsinstrument[4:5]:
		trial_start_time = clock.time()
		src = pool[instrument.question+".wav"]
		mysampler =Sampler(src,volume = 0.2)
		mysampler.play()
		mysampler.wait()
		
		#if newinst:
		#	my_canvas.text(answerinst, y = 50, font_size = 20)
		my_canvas.prepare()
		my_canvas.show()
		
		
		#here we need to add code to give possitive /or negative feedback for the instrument slimpstampen model
		
		
		# Listen for keyboard input and show keypresses on screen as they occur
		my_keyboard = Keyboard()
		keyboard_response = ""
		erased_answer = False
		rt = float("inf")
		
		# Keep listening for key presses until the user presses Enter
		while True:
			key, time = my_keyboard.get_key()
			
			# The first keypress determines the response time
			if keyboard_response == "" and not erased_answer:
				rt = clock.time() - trial_start_time
			
			if key == "return":
				break
				
			# press 1 for repeating the note
			if key == "1" or key =="backspace":
				if key == "1":
					Sampler(src).play()
				keyboard_response = keyboard_response[:-1]
				# If the answer is completely erased, the RT is no longer informative
				if keyboard_response == "":
					erased_answer = True
					rt = float("inf")
			
			elif key == "space":
				keyboard_response += " "
			
			else:
				keyboard_response += my_keyboard.to_chr(key)
		
			# Update what's on screen'
			my_canvas.clear()
			#my_canvas.text(prompt, font_size = 30)
			#if newinst:
			#	my_canvas.text(answerinst, y = 50, font_size = 20)
			my_canvas.text(keyboard_response, y = 100)
			my_canvas.prepare()
			my_canvas.show()
		
		
		# Check if the response is correct
		correct = keyboard_response == instrument.answer
		
		# Log response
		response = Response(instrument, trial_start_time, rt, correct)
		minstruments.register_response(response) 
		
		# Show feedback
		feedback_color = "green" if correct else "red"
		my_canvas.text(keyboard_response, y = 100, color = feedback_color)
		if not correct:
			my_canvas.text(instrument.answer, y = 150)
		my_canvas.prepare()
		my_canvas.show()
		clock.sleep(var.feedback_duration)
		
		# Clear the screen between trials
		my_canvas.clear()
		my_canvas.prepare()
		my_canvas.show()
		clock.sleep(var.inter_trial_interval)
		
		
		#var.time_up = False
		# reset the clock
		#var.session_start_time = clock.time()
	__end__
	set _prepare ""

define inline_script Text_Class
	set description "Executes Python code"
	___run__
	class Text:
	    def __init__(self, string, y= 0, font_size= 20, color= 'white'):
	        self.string = string
	        self.y = y
	        self.font_size = font_size
	        self.color = color
	__end__
	set _prepare ""

define sketchpad Training_instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#fec52d" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Starting training block... <br />press any key to continue, when you're ready" x=-96 y=-32 z_index=0

define sequence Trial_Item
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define inline_script UI_Class
	set description "Executes Python code"
	___run__
	class UI:
	    def __init__(self):
	        self.current_screen = 'none'
	        self.keyboard = Keyboard(self)
	        self.currently_displayed_texts = []
	        
	    def create_canvas(self):
	        self.canvas = Canvas()
	        self.current_screen = 'canvas'
	        
	    def add_text_to_canvas(self, text):
	        self.canvas.text(text.string, y= text.y, \
	                         font_size= text.font_size, color= text.color)
	        
	    def add_lock_text(self, text_list):
	        self.locked_text += text_list
	        
	    def lock_text(self):
	        self.locked_text = self.currently_displayed_texts
	        
	    def unlock_text(self):
	        self.locked_text = []
	        
	    def show_texts_on_canvas(self, text_list):
	        if self.current_screen != 'canvas': self.create_canvas()
	        self.canvas.clear()
	        self.currently_displayed_texts = []
	        
	        text_list += self.locked_text
	        
	        for text in text_list:
	            self.add_text_to_canvas(text)
	            
	        self.currently_displayed_texts = text_list
	        
	        self.canvas.prepare()
	        self.canvas.show()
	        
	    def show_text_on_canvas(self, text, y= 0, font_size= 20, color= 'white'):
	        text_obj = Text(text, y, font_size, color)
	        show_texts_on_canvas(self, [text_obj])
	        
	    def repeat_cue(self):
	        pass
	        
	    def play_audio(self, file_name):
	        src = pool[file_name]
	        Sampler(src).play()
	
	    def get_text_input(self):
	        return self.keyboard.take_input()
	__end__
	set _prepare ""

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run slimstampen_setup always
	run instructions always
	run learning_session_setup always
	run SlimStampen always
	run Text_Class always
	run Keyboard_Input_Class always
	run UI_Class always
	run Experiment_Class always
	run Setup always
	run Control_Variables always
	run Loop always
	run Perfect_pitch_loop always
	run save_data always

define sketchpad instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Instructions go here. Press any key to begin." x=0 y=-32 z_index=0
	draw textline center=1 color="#fd8008" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press 1 to repeat the fact" x=0 y=0 z_index=0

define loop instruments_while_items_left
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instrument piano
	setcycle 1 instrument drums
	setcycle 2 instrument harp
	run ""

define inline_script learning_session_setup
	set description "Executes Python code"
	___run__
	# Start the clock
	var.session_start_time = clock.time()
	
	# Session will run until time_up == True
	var.time_up = False
	
	# Keep track of trial number
	var.trial_num = 1
	
	# Settings
	var.session_duration = 5000
	var.feedback_duration = 800
	var.inter_trial_interval = 200
	
	## testing phase
	var.end = False
	__end__
	set _prepare ""

define inline_script masking_script
	set description "Executes Python code"
	___run__
	trial_start_time = clock.time()
	
	# Get next fact from the model
	# next_factinst, newinst = minstruments.get_next_fact(current_time = trial_start_time)
	# promptinst = next_factinst.question
	# answerinst = next_factinst.answer
	
	#next instrument
	next_factinst, newinst = minstruments.get_next_fact(current_time = trial_start_time)
	promptinst = next_factinst.question
	answerinst = next_factinst.answer
	
	
	# Show prompt
	my_canvas = Canvas()
	
	#my_canvas.text(prompt, font_size = 30)
	# we don't want a text prompt, we want a sampler prompt
	# file pool is the folder named __pool__ in this folder
	
	
	# TODO:
	# #OPTIONS FOR MASKING
	# first we want to clear auditory memory by using some noise
	# OPTIION 1 using the synth - terrible, not very effective I think
	# bad_sound = Synth(osc="white_noise", length=800, attack=800, decay=500)
	# bad_sound.volume = 0.25
	# bad_sound.play()
	
	## OPTION 2 - the lick (lol) - right register... but also annoying!
	# can we use different masking sounds in the same set to prevent annoyance?
	'''
	src = pool['mask.wav']
	Sampler(src).play()
	
	# probably too long
	clock.sleep(2000)
	
	'''
	
	src = pool[promptinst+".wav"]
	mysampler =Sampler(src,volume = 0.2)
	mysampler.play()
	mysampler.wait()
	
	if newinst:
		my_canvas.text(answerinst, y = 50, font_size = 20)
	my_canvas.prepare()
	my_canvas.show()
	
	
	#here we need to add code to give possitive /or negative feedback for the instrument slimpstampen model
	
	
	# Listen for keyboard input and show keypresses on screen as they occur
	my_keyboard = Keyboard()
	keyboard_response = ""
	erased_answer = False
	rt = float("inf")
	
	# Keep listening for key presses until the user presses Enter
	while True:
		key, time = my_keyboard.get_key()
		
		# The first keypress determines the response time
		if keyboard_response == "" and not erased_answer:
			rt = clock.time() - trial_start_time
		
		if key == "return":
			break
			
		# press 1 for repeating the note
		if key == "1" or key =="backspace":
			if key == "1":
				Sampler(src).play()
			keyboard_response = keyboard_response[:-1]
			# If the answer is completely erased, the RT is no longer informative
			if keyboard_response == "":
				erased_answer = True
				rt = float("inf")
		
		elif key == "space":
			keyboard_response += " "
		
		else:
			keyboard_response += my_keyboard.to_chr(key)
	
		# Update what's on screen'
		my_canvas.clear()
		#my_canvas.text(prompt, font_size = 30)
		if newinst:
			my_canvas.text(answerinst, y = 50, font_size = 20)
		my_canvas.text(keyboard_response, y = 100)
		my_canvas.prepare()
		my_canvas.show()
	
	
	# Check if the response is correct
	correct = keyboard_response == answerinst
	
	# Log response
	response = Response(next_factinst, trial_start_time, rt, correct, "instrument", "train")
	minstruments.register_response(response) 
	
	# Show feedback
	feedback_color = "green" if correct else "red"
	my_canvas.text(keyboard_response, y = 100, color = feedback_color)
	if not correct:
		my_canvas.text(answerinst, y = 150)
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.feedback_duration)
	
	# Clear the screen between trials
	my_canvas.clear()
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.inter_trial_interval)
	
	# Check if time is up
	if clock.time() - var.session_start_time >= var.session_duration:
		var.time_up = True
		
	# Increment trial number
	var.trial_num += 1
	__end__
	set _prepare ""

define loop new_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run ""

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define sequence new_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Training_instructions always
	run while_there_is_time_left always
	run Testing_instructions always
	run Testingblock always

define sketchpad new_sketchpad
	set duration keypress
	set description "Displays stimuli"

define loop pitch_while_there_are_items_left
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if "[end] = yes"
	setcycle 0 pitch e3
	setcycle 1 pitch f3
	setcycle 2 pitch g3
	run ""

define inline_script present_trial
	set description "Executes Python code"
	___run__
	trial_start_time = clock.time()
	
	# Get next fact from the model
	next_fact, new = m.get_next_fact(current_time = trial_start_time)
	prompt = next_fact.question
	answer = next_fact.answer
	
	# #next instrument
	# next_fact, new = minstruments.get_next_fact(current_time = trial_start_time)
	# prompt = next_fact.question
	# answer = next_fact.answer
	
	
	# Show prompt
	my_canvas = Canvas()
	
	#my_canvas.text(prompt, font_size = 30)
	# we don't want a text prompt, we want a sampler prompt
	# file pool is the folder named __pool__ in this folder
	
	
	# TODO:
	# #OPTIONS FOR MASKING
	# first we want to clear auditory memory by using some noise
	# OPTIION 1 using the synth - terrible, not very effective I think
	# bad_sound = Synth(osc="white_noise", length=800, attack=800, decay=500)
	# bad_sound.volume = 0.25
	# bad_sound.play()
	
	## OPTION 2 - the lick (lol) - right register... but also annoying!
	# can we use different masking sounds in the same set to prevent annoyance?
	'''
	src = pool['mask.wav']
	Sampler(src).play()
	
	# probably too long
	clock.sleep(2000)
	
	'''
	
	# src = pool[promptinst+".wav"]
	# Sampler(src).play()
	
	# if newinst:
	# 	my_canvas.text(answerinst, y = 50, font_size = 20)
	# my_canvas.prepare()
	# my_canvas.show()
	
	
	#here we need to add code to give possitive /or negative feedback for the instrument slimpstampen model
	
	#actual note present
	prompt_name = prompt+'.wav'
	src = pool[prompt_name]
	Sampler(src).play()
	
	if new:
		my_canvas.text(answer, y = 50, font_size = 20)
	my_canvas.prepare()
	my_canvas.show()
	
	# Listen for keyboard input and show keypresses on screen as they occur
	my_keyboard = Keyboard()
	keyboard_response = ""
	erased_answer = False
	rt = float("inf")
	
	# Keep listening for key presses until the user presses Enter
	while True:
		key, time = my_keyboard.get_key()
		
		# The first keypress determines the response time
		if keyboard_response == "" and not erased_answer:
			rt = clock.time() - trial_start_time
		
		if key == "return":
			break
			
		# press r for repeating the note
		if key == "1" or key == "backspace":
			if key == "1":
				Sampler(src).play()
			keyboard_response = keyboard_response[:-1]
			# If the answer is completely erased, the RT is no longer informative
			if keyboard_response == "":
				erased_answer = True
				rt = float("inf")
		
		elif key == "space":
			keyboard_response += " "
		
		else:
			keyboard_response += my_keyboard.to_chr(key)
	
		# Update what's on screen'
		my_canvas.clear()
		#my_canvas.text(prompt, font_size = 30)
		if new:
			my_canvas.text(answer, y = 50, font_size = 20)
		my_canvas.text(keyboard_response, y = 100)
		my_canvas.prepare()
		my_canvas.show()
	
	
	# Check if the response is correct
	correct = keyboard_response == answer
	
	# Log response
	response = Response(next_fact, trial_start_time, rt, correct, "pitch", "train")
	m.register_response(response) 
	
	# Show feedback
	feedback_color = "green" if correct else "red"
	my_canvas.text(keyboard_response, y = 100, color = feedback_color)
	if not correct:
		my_canvas.text(answer, y = 150)
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.feedback_duration)
	
	# Clear the screen between trials
	my_canvas.clear()
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.inter_trial_interval)
	
	# Check if time is up
	if clock.time() - var.session_start_time >= var.session_duration:
		var.time_up = True
		
	# Increment trial number
	var.trial_num += 1
	__end__
	___prepare__
	import numpy as np
	import os
	__end__

define inline_script save_data
	set description "Executes Python code"
	___run__
	# Write the SlimStampen data to the OpenSesame log file
	dat = m.export_data(header_true=True)
	dat2 = minstruments.export_data(header_true = False)
	log.write(dat)
	log.write(dat2)
	__end__
	set _prepare ""

define inline_script slimstampen_setup
	set description "Executes Python code"
	___run__
	import random
	m = SpacingModel()
	m_instruments = SpacingModel()
	# Add some study facts to the model (you could also read them from a CSV file)
	'''facts = [Fact(1, "hello", "bonjour"),
			Fact(2, "dog", "chien"),
			Fact(3, "cat", "chat"),
			Fact(4, "computer", "ordinateur"),
			Fact(5, "house", "maison"),
			Fact(6, "car", "voiture"),
			Fact(7, "fish", "poisson"),
			Fact(8, "bottle", "bouteille")]
	'''
	# doing this by hand for now (only whole pitches)
	factsinstrument = [Fact(1,"accordeon", "accordeon"),
			 Fact(2,"clarinet", "clarinet"),
		     Fact(3,"drums", "drums"),
			 Fact(4, "electric_guitar", "electric guitar"),
			 Fact(5, "flute", "flute"),
			 Fact(6, "frenchhorn","french horn"),
			 Fact(7, "harmonica", "harmonica"),
			 Fact(8, "harp", "harp"),
			Fact(9, "maraccas", "maraccas"),
			Fact(10, "piano", "piano")]
			
	random.shuffle(factsinstrument)
	
	facts = [Fact(1,"e3", "e"),
			 Fact(2,"f3", "f"),
		     Fact(3,"g3", "g"),
			 Fact(4, "a4", "a"),
			 Fact(5, "b4", "b"),
			 Fact(6, "c4", "c"),
			 Fact(7, "d4", "d"),
			 Fact(8, "e4", "e")]
	
	random.shuffle(facts)
	
	for fact in facts:
		m.add_fact(fact)
	for fact in factsinstrument:
		m_instruments.add_fact(fact)
	__end__
	___prepare__
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	__end__

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Mask_Item always
	run Trial_Item always
	run masking_script always
	run present_trial always

define loop while_there_is_time_left
	set source table
	set repeat 1000
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[time_up] = yes"
	setcycle 0 ignore_this_variable 1
	run trial_sequence

