---
API: 2.1
OpenSesame: 3.3.10
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\Gebruiker\\Documents\\University\\User_Models\\AbsolutePitch-Slimstampen"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background white

define sketchpad Empty_Screen
	set duration keypress
	set description "Displays stimuli"

define form_text_display Feedback
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Feedback
	set form_text "You were incorrect. The correct answer was [second_note_interval_from_first_note] semitones.semitones"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define inline_script Feedback_Script
	set description "Executes Python code"
	___run__
	# Show feedback
	feedback_color = "green" if correct else "red"
	my_canvas.text(keyboard_response, y = 100, color = feedback_color)
	
	if not correct: my_canvas.text(answerinst, y = 150)
	
	my_canvas.prepare()
	my_canvas.show()
	
	clock.sleep(var.feedback_duration)
	__end__
	set _prepare ""

define inline_script Import_SlimStampen
	set description "Executes Python code"
	set _run ""
	set _prepare ""

define form_text_display Instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Instructions
	set form_text "You will hear two notes. Please respond with the number of semitones between them (1 to 12)"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define inline_script Learning_Session_Setup
	set description "Executes Python code"
	___run__
	# Start the clock
	var.session_start_time = clock.time()
	
	# Session will run until time_up == True
	var.time_up = False
	
	# Keep track of trial number
	var.trial_num = 1
	
	# Settings
	var.session_duration = 100000
	var.feedback_duration = 800
	var.inter_trial_interval = 200
	
	# Pre set this variable because it does not work otherwise
	var.response = 1
	__end__
	set _prepare ""

define form_text_display Notes_Text
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Notes_Text
	set form_text "Listen to the notes"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define inline_script Obtain_Item
	set description "Executes Python code"
	___run__
	__end__
	___prepare__
	trial_start_time = clock.time()
	
	next_fact, new = m.get_next_fact(current_time = trial_start_time)
	first_note_hz, second_note_hz = next_fact.question
	var.second_note_interval_from_first_note = next_fact.answer
	
	var.set(u'first_note_hz', first_note_hz)
	var.set(u'second_note_hz', second_note_hz)
	__end__

define inline_script Read_Items
	set description "Executes Python code"
	___run__
	# from slimstampen.spacingmodel import SpacingModel, Fact
	
	def add_items(slimstampenmodel, filename, splitter):
	    with open(filename) as f:
	        lines = f.readlines()
	        
	        for i, line in enumerate(lines[1:]):
	            cells = line.split(splitter)
	            m.add_fact(Fact(i, (cells[2], cells[3]), cells[1]))
	
	m = SpacingModel()
	add_items(m, pool['opensesamestuff.csv'], ',')
	__end__
	set _prepare ""

define form_text_input Response
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title Response
	set form_question "Please type a number in [1, 12] and press Enter"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_display Response_Text
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Response_Text
	set form_text "Please type a number in [1, 12] and press Enter"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define inline_script SS_Register_Response
	set description "Executes Python code"
	___run__
	var.rt = clock.time() - trial_start_time
	var.correct = (var.response == var.second_note_interval_from_first_note)
	ss_response = Response(next_fact, trial_start_time, var.rt, var.correct)
	m.register_response(ss_response) 
	__end__
	set _prepare ""

define inline_script Set_WD_to_File_Location
	set description "Executes Python code"
	___run__
	import os
	
	dir_path = os.path.dirname(os.path.realpath(__file__))
	os.chdir(dir_path)
	__end__
	set _prepare ""

define inline_script SlimStampen_Module
	set description "Executes Python code"
	___run__
	from __future__ import division
	import math
	import pandas as pd
	from collections import namedtuple
	
	Fact = namedtuple("Fact", "fact_id, question, answer")
	Response = namedtuple("Response", "fact, start_time, rt, correct")
	Encounter = namedtuple("Encounter", "activation, time, reaction_time, decay")
	
	# question in audio fact is a file name.
	
	class SpacingModel(object):
	
	    # Model constants
	    LOOKAHEAD_TIME = 15000
	    FORGET_THRESHOLD = -0.8
	    DEFAULT_ALPHA = 0.3
	    C = 0.25
	    F = 1.0
	
	    def __init__(self):
	        self.facts = []
	        self.responses = []
	
	    def add_fact(self, fact):
	        # type: (Fact) -> None
	        """
	        Add a fact to the list of study items.
	        """
	        # Ensure that a fact with this ID does not exist already
	        if next((f for f in self.facts if f.fact_id == fact.fact_id), None):
	            raise RuntimeError(
	                "Error while adding fact: There is already a fact with the same ID: {}. Each fact must have a unique ID".format(fact.fact_id))
	
	        self.facts.append(fact)
	
	
	    def register_response(self, response):
	        # type: (Response) -> None
	        """
	        Register a response.
	        """
	        # Prevent duplicate responses
	        if next((r for r in self.responses if r.start_time == response.start_time), None):
	            raise RuntimeError(
	                "Error while registering response: A response has already been logged at this start_time: {}. Each response must occur at a unique start_time.".format(response.start_time))
	
	        self.responses.append(response)
	
	
	    def get_next_fact(self, current_time):
	        # type: (int) -> (Fact, bool)
	        """
	        Returns a tuple containing the fact that needs to be repeated most urgently and a boolean indicating whether this fact is new (True) or has been presented before (False).
	        If none of the previously studied facts needs to be repeated right now, return a new fact instead.
	        """
	        # Calculate all fact activations in the near future
	        fact_activations = [(f, self.calculate_activation(current_time + self.LOOKAHEAD_TIME, f)) for f in self.facts]
	
	        seen_facts = [(f, a) for (f, a) in fact_activations if a > -float("inf")]
	        not_seen_facts = [(f, a) for (f, a) in fact_activations if a == -float("inf")]
	
	        # Prevent an immediate repetition of the same fact
	        if len(seen_facts) > 2:
	            last_response = self.responses[-1]
	            seen_facts = [(f, a) for (f, a) in seen_facts if f.fact_id != last_response.fact.fact_id]
	
	        # Reinforce the weakest fact with an activation below the threshold
	        seen_facts_below_threshold = [(f, a) for (f, a) in seen_facts if a < self.FORGET_THRESHOLD]
	        if len(not_seen_facts) == 0 or len(seen_facts_below_threshold) > 0:
	            weakest_fact = min(seen_facts, key = lambda t: t[1])
	            return((weakest_fact[0], False))
	
	        # If none of the previously seen facts has an activation below the threshold, return a new fact
	        return((not_seen_facts[0][0], True))
	
	
	    def get_rate_of_forgetting(self, time, fact):
	        # type: (int, Fact) -> float
	        """
	        Return the estimated rate of forgetting of the fact at the specified time
	        """
	        encounters = []
	
	        responses_for_fact = [r for r in self.responses if r.fact.fact_id == fact.fact_id and r.start_time < time]
	        alpha = self.DEFAULT_ALPHA
	
	        # Calculate the activation by running through the sequence of previous responses
	        for response in responses_for_fact:
	            activation = self.calculate_activation_from_encounters(encounters, response.start_time)
	            encounters.append(Encounter(activation, response.start_time, self.normalise_reaction_time(response), self.DEFAULT_ALPHA))
	            alpha = self.estimate_alpha(encounters, activation, response, alpha)
	
	            # Update decay estimates of previous encounters
	            encounters = [encounter._replace(decay = self.calculate_decay(encounter.activation, alpha)) for encounter in encounters]
	
	        return(alpha)
	
	
	    def calculate_activation(self, time, fact):
	        # type: (int, Fact) -> float
	        """
	        Calculate the activation of a fact at the given time.
	        """
	
	        encounters = []
	
	        responses_for_fact = [r for r in self.responses if r.fact.fact_id == fact.fact_id and r.start_time < time]
	        alpha = self.DEFAULT_ALPHA
	
	        # Calculate the activation by running through the sequence of previous responses
	        for response in responses_for_fact:
	            activation = self.calculate_activation_from_encounters(encounters, response.start_time)
	            encounters.append(Encounter(activation, response.start_time, self.normalise_reaction_time(response), self.DEFAULT_ALPHA))
	            alpha = self.estimate_alpha(encounters, activation, response, alpha)
	
	            # Update decay estimates of previous encounters
	            encounters = [encounter._replace(decay = self.calculate_decay(encounter.activation, alpha)) for encounter in encounters]
	
	        return(self.calculate_activation_from_encounters(encounters, time))
	
	
	    def calculate_decay(self, activation, alpha):
	        # type: (float, float) -> float
	        """
	        Calculate activation-dependent decay
	        """
	        return self.C * math.exp(activation) + alpha
	
	
	    def estimate_alpha(self, encounters, activation, response, previous_alpha):
	        # type: ([Encounter], float, Response, float) -> float
	        """
	        Estimate the rate of forgetting parameter (alpha) for an item.
	        """
	        if len(encounters) < 3:
	            return(self.DEFAULT_ALPHA)
	
	        a_fit = previous_alpha
	        reading_time = self.get_reading_time(response.fact.question)
	        estimated_rt = self.estimate_reaction_time_from_activation(activation, reading_time)
	        est_diff = estimated_rt - self.normalise_reaction_time(response)
	
	        if est_diff < 0:
	            # Estimated RT was too short (estimated activation too high), so actual decay was larger
	            a0 = a_fit
	            a1 = a_fit + 0.05
	        
	        else:
	            # Estimated RT was too long (estimated activation too low), so actual decay was smaller
	            a0 = a_fit - 0.05
	            a1 = a_fit
	
	        # Binary search between previous fit and proposed alpha
	        for _ in range(6):
	            # Adjust all decays to use the new alpha
	            a0_diff = a0 - a_fit
	            a1_diff = a1 - a_fit
	            d_a0 = [e._replace(decay = e.decay + a0_diff) for e in encounters]
	            d_a1 = [e._replace(decay = e.decay + a1_diff) for e in encounters]
	
	            # Calculate the reaction times from activation and compare against observed RTs
	            encounter_window = encounters[max(1, len(encounters) - 5):]
	            total_a0_error = self.calculate_predicted_reaction_time_error(encounter_window, d_a0, reading_time)
	            total_a1_error = self.calculate_predicted_reaction_time_error(encounter_window, d_a1, reading_time)
	
	            # Adjust the search area based on the lowest total error
	            ac = (a0 + a1) / 2
	            if total_a0_error < total_a1_error:
	                a1 = ac
	            else:
	                a0 = ac
	        
	        # The new alpha estimate is the average value in the remaining bracket
	        return((a0 + a1) / 2)
	
	
	    def calculate_activation_from_encounters(self, encounters, current_time):
	        # type: ([Encounter], int) -> float
	        included_encounters = [e for e in encounters if e.time < current_time]
	
	        if len(included_encounters) == 0:
	            return(-float("inf"))
	
	        return(math.log(sum([math.pow((current_time - e.time) / 1000, -e.decay) for e in included_encounters])))
	
	
	    def calculate_predicted_reaction_time_error(self, test_set, decay_adjusted_encounters, reading_time):
	        # type: ([Encounter], [Encounter], Fact) -> float
	        """
	        Calculate the summed absolute difference between observed response times and those predicted based on a decay adjustment.
	        """
	        activations = [self.calculate_activation_from_encounters(decay_adjusted_encounters, e.time - 100) for e in test_set]
	        rt = [self.estimate_reaction_time_from_activation(a, reading_time) for a in activations]
	        rt_errors = [abs(e.reaction_time - rt) for (e, rt) in zip(test_set, rt)]
	        return(sum(rt_errors))
	
	
	    def estimate_reaction_time_from_activation(self, activation, reading_time):
	        # type: (float, int) -> float
	        """
	        Calculate an estimated reaction time given a fact's activation and the expected reading time 
	        """
	        return((self.F * math.exp(-activation) + (reading_time / 1000)) * 1000)
	
	
	    def get_max_reaction_time_for_fact(self, fact):
	        # type: (Fact) -> float
	        """
	        Return the highest response time we can reasonably expect for a given fact
	        """
	        reading_time = self.get_reading_time(fact.question)
	        max_rt = 1.5 * self.estimate_reaction_time_from_activation(self.FORGET_THRESHOLD, reading_time)
	        return(max_rt)
	
	
	    def get_reading_time(self, text):
	        # type: (str) -> float
	        """
	        Return expected reading time in milliseconds for a given string
	        """
	        return 2000
	        word_count = len(text.split())
	
	        if word_count > 1:
	            character_count = len(text)
	            return(max((-157.9 + character_count * 19.5), 300))
	        
	        return(300)
	
	    
	    def normalise_reaction_time(self, response):
	        # type: (Response) -> float
	        """
	        Cut off extremely long responses to keep the reaction time within reasonable bounds
	        """
	        rt = response.rt if response.correct else 60000
	        max_rt = self.get_max_reaction_time_for_fact(response.fact)
	        return(min(rt, max_rt))
	
	
	    def export_data(self, path = None):
	        # type: (str) -> DataFrame
	        """
	        Save the response data to the specified csv file, and return a copy of the pandas DataFrame.
	        If no path is specified, return a CSV-formatted copy of the data instead.
	        """
	
	        def calc_rof(row):
	            return(self.get_rate_of_forgetting(row["start_time"] + 1, row["fact"]))
	
	        dat_resp = pd.DataFrame(self.responses)
	        dat_facts = pd.DataFrame([r.fact for r in self.responses])
	        dat = pd.concat([dat_resp, dat_facts], axis = 1)
	
	        # Add column for rate of forgetting estimate after each observation
	        dat["alpha"] = dat.apply(calc_rof, axis = 1)
	        dat.drop(columns = "fact", inplace = True)
	
	        # Add trial number column
	        dat.index.name = "trial"
	        dat.index = dat.index + 1
	
	        # Save to CSV file if a path was specified, otherwise return the CSV-formatted output
	        if path is not None:
	            dat.to_csv(path, encoding="UTF-8")
	            return(dat)
	        
	        return(dat.to_csv())
	__end__
	set _prepare ""

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run SlimStampen_Module always
	run new_inline_script always
	run Read_Items always
	run Learning_Session_Setup always
	run Instructions always
	run Empty_Screen always
	run present_items always

define reset_feedback feedback_reset
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define synth first_note
	set volume 1
	set pan 0
	set osc sine
	set length 1000
	set freq "[first_note_hz]"
	set duration sound
	set description "A basic sound synthesizer"
	set decay 5
	set attack 0

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sequence item
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Obtain_Item always
	run first_note always
	run second_note always
	run Response always
	run SS_Register_Response always
	run log_data always
	run Feedback_Script always

define keyboard_response keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define logger log_data
	set description "Logs experimental data"
	set auto_log yes

define feedback new_feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"

define feedback new_feedback_1
	set reset_variables no
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[correct]" x=-256 y=-288 z_index=0

define inline_script new_inline_script
	set description "Executes Python code"
	set _run "var.response = 1"
	set _prepare ""

define loop present_items
	set source_file "opensesamestuff.csv"
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 144
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	setcycle 1 empty_column ""
	setcycle 2 empty_column ""
	setcycle 3 empty_column ""
	setcycle 4 empty_column ""
	setcycle 5 empty_column ""
	setcycle 6 empty_column ""
	setcycle 7 empty_column ""
	setcycle 8 empty_column ""
	setcycle 9 empty_column ""
	setcycle 10 empty_column ""
	setcycle 11 empty_column ""
	setcycle 12 empty_column ""
	setcycle 13 empty_column ""
	setcycle 14 empty_column ""
	setcycle 15 empty_column ""
	setcycle 16 empty_column ""
	setcycle 17 empty_column ""
	setcycle 18 empty_column ""
	setcycle 19 empty_column ""
	setcycle 20 empty_column ""
	setcycle 21 empty_column ""
	setcycle 22 empty_column ""
	setcycle 23 empty_column ""
	setcycle 24 empty_column ""
	setcycle 25 empty_column ""
	setcycle 26 empty_column ""
	setcycle 27 empty_column ""
	setcycle 28 empty_column ""
	setcycle 29 empty_column ""
	setcycle 30 empty_column ""
	setcycle 31 empty_column ""
	setcycle 32 empty_column ""
	setcycle 33 empty_column ""
	setcycle 34 empty_column ""
	setcycle 35 empty_column ""
	setcycle 36 empty_column ""
	setcycle 37 empty_column ""
	setcycle 38 empty_column ""
	setcycle 39 empty_column ""
	setcycle 40 empty_column ""
	setcycle 41 empty_column ""
	setcycle 42 empty_column ""
	setcycle 43 empty_column ""
	setcycle 44 empty_column ""
	setcycle 45 empty_column ""
	setcycle 46 empty_column ""
	setcycle 47 empty_column ""
	setcycle 48 empty_column ""
	setcycle 49 empty_column ""
	setcycle 50 empty_column ""
	setcycle 51 empty_column ""
	setcycle 52 empty_column ""
	setcycle 53 empty_column ""
	setcycle 54 empty_column ""
	setcycle 55 empty_column ""
	setcycle 56 empty_column ""
	setcycle 57 empty_column ""
	setcycle 58 empty_column ""
	setcycle 59 empty_column ""
	setcycle 60 empty_column ""
	setcycle 61 empty_column ""
	setcycle 62 empty_column ""
	setcycle 63 empty_column ""
	setcycle 64 empty_column ""
	setcycle 65 empty_column ""
	setcycle 66 empty_column ""
	setcycle 67 empty_column ""
	setcycle 68 empty_column ""
	setcycle 69 empty_column ""
	setcycle 70 empty_column ""
	setcycle 71 empty_column ""
	setcycle 72 empty_column ""
	setcycle 73 empty_column ""
	setcycle 74 empty_column ""
	setcycle 75 empty_column ""
	setcycle 76 empty_column ""
	setcycle 77 empty_column ""
	setcycle 78 empty_column ""
	setcycle 79 empty_column ""
	setcycle 80 empty_column ""
	setcycle 81 empty_column ""
	setcycle 82 empty_column ""
	setcycle 83 empty_column ""
	setcycle 84 empty_column ""
	setcycle 85 empty_column ""
	setcycle 86 empty_column ""
	setcycle 87 empty_column ""
	setcycle 88 empty_column ""
	setcycle 89 empty_column ""
	setcycle 90 empty_column ""
	setcycle 91 empty_column ""
	setcycle 92 empty_column ""
	setcycle 93 empty_column ""
	setcycle 94 empty_column ""
	setcycle 95 empty_column ""
	setcycle 96 empty_column ""
	setcycle 97 empty_column ""
	setcycle 98 empty_column ""
	setcycle 99 empty_column ""
	setcycle 100 empty_column ""
	setcycle 101 empty_column ""
	setcycle 102 empty_column ""
	setcycle 103 empty_column ""
	setcycle 104 empty_column ""
	setcycle 105 empty_column ""
	setcycle 106 empty_column ""
	setcycle 107 empty_column ""
	setcycle 108 empty_column ""
	setcycle 109 empty_column ""
	setcycle 110 empty_column ""
	setcycle 111 empty_column ""
	setcycle 112 empty_column ""
	setcycle 113 empty_column ""
	setcycle 114 empty_column ""
	setcycle 115 empty_column ""
	setcycle 116 empty_column ""
	setcycle 117 empty_column ""
	setcycle 118 empty_column ""
	setcycle 119 empty_column ""
	setcycle 120 empty_column ""
	setcycle 121 empty_column ""
	setcycle 122 empty_column ""
	setcycle 123 empty_column ""
	setcycle 124 empty_column ""
	setcycle 125 empty_column ""
	setcycle 126 empty_column ""
	setcycle 127 empty_column ""
	setcycle 128 empty_column ""
	setcycle 129 empty_column ""
	setcycle 130 empty_column ""
	setcycle 131 empty_column ""
	setcycle 132 empty_column ""
	setcycle 133 empty_column ""
	setcycle 134 empty_column ""
	setcycle 135 empty_column ""
	setcycle 136 empty_column ""
	setcycle 137 empty_column ""
	setcycle 138 empty_column ""
	setcycle 139 empty_column ""
	setcycle 140 empty_column ""
	setcycle 141 empty_column ""
	setcycle 142 empty_column ""
	setcycle 143 empty_column ""
	run item

define synth second_note
	set volume 1
	set pan 0
	set osc sine
	set length 1000
	set freq "[second_note_hz]"
	set duration sound
	set description "A basic sound synthesizer"
	set decay 5
	set attack 500

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="OpenSesame 3.3 <i>Lentiform Loewenfeld</i>" x=0 y=0 z_index=0

